OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  Mean

  This script calculates the mean of
  all of the channels in a signal.

  It describes the use of the
  numpy python library.

CSV File Reader
  Filename = C:/Applications/record-[2023.05.22-14.09.32]_BRUT_DOUBLE2.csv

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 2
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Signal stream -> Mean => #4
  Clock frequency (Hz) = 25
  Script = C:/Applications/_GitHub_Files/Projet-ICM-2023/ICM_OpenVibe_Code.py
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
